PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [3440, 1440]
  color = black
  expName = 270300_Mental_Rotation
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Routines
  Routine instructions_2D
    ImageComponent instr_2D
      image = Stimuli_2D\instructions\instructions.png
      size = (584, 441)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent instr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_Fixation_2D
    PolygonComponent fix_point
      durationEstim = 1
      fillColor = white
      shape = circle
      size = (10, 10)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    StaticComponent fix_point_ISI
      durationEstim = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial_2D
    CodeComponent trial_2D_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Importieren der relevanten / benötigten Libraries
        import random # für Zugriff auf die random- und shuffle-Methode

        # Erstellen der Liste mit den Bild-Indices
        # Da die Bilder von 1-15 durchnummeriert sind, wird eine Liste mit entsprechenden Integern angelegt
        img_index = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]

        # Randomisierung der Liste mit den Bild-Indices
        # wenn als Pfad zur Bilddatei $#Stimuli_2D/target' + str(img_index[trials.thisN]) + '.png'
        # verwendet wird, erhält man eine zufällige Reihenfolge der Bilddateien,
        # da die img_index-Liste vorher geshuffelt wurde
        random.shuffle(img_index)
      Begin Routine:
        # Festlegen der x-Position der Correct- und
        # Wrong-Stimuli / Bilder
        # x_pos_correct wird bei dem Bildstimulus
        # img_correct, -x_pos_correct bei dem
        # Bildstimulus img_wrong unter Position als x-Koordinate
        # verwendet. Der Wert 250 ist arbiträr gewählt, die
        # Anordnung der Stimuli ähnelt aber der in der
        # Aufgabenstellung aufgeführten Anordnung.
        if random.random() < 0.5:
            x_pos_correct = -250
        else:
            x_pos_correct = 250
    ImageComponent img_correct
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_ISI] = $'Stimuli_2d/correct' + str(img_index[trials_2D.thisN]) + '.png'
      pos [set every repeat] = (x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_target
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_ISI] = $'Stimuli_2d/target' + str(img_index[trials_2D.thisN]) + '.png'
      pos [set every repeat] = (0, 139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent img_wrong
      durationEstim = 10
      image [set during: ITI_Fixation_2D.fix_point_ISI] = $'Stimuli_2d/wrong' + str(img_index[trials_2D.thisN]) + '.png'
      pos [set every repeat] = (-x_pos_correct, -139)
      size = (300, 278)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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Flow
  Routine instructions_2D
  LoopInitiator trials_2D loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine ITI_Fixation_2D
    Routine trial_2D
  LoopTerminator trials_2D
